PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = official assembling objects test
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Routines
  Routine trial
    ImageComponent question_images
      image [set every repeat] = $ImageFile
      size = (1.25, 0.7)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response
      allowedKeys = '1',  '2' , '3' , '4'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine instructions
    TextComponent participant_instructions
      color = black
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a multiple-choice test.

        The left-most box shows shapes broken up. The 4 boxes on the right show the shapes assembled into a new figure. Select the answer where the shapes are assembled correctly.

        To select your answer, press 1, 2, 3, or 4 on the keyboard.

        Press any key to begin the test.
    KeyboardComponent remove_instructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you_slide
    TextComponent thankyouslide
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The test is now complete. Thank you!

        Press any key to exit the test.
    KeyboardComponent exit
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sample_question_instructions
    TextComponent sample_instructions
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The next slide will show a sample question.

        Practice responding by pressing your response (1, 2, 3, 4) on the keyboard.
    KeyboardComponent end_sampleinstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine actual_sample_question
    ImageComponent image
      image = assembling_images/practiceq.png
      size = (1.1, 0.55)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent endsamplequestion
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sample_question_feedback_and_start_test
    TextComponent sample_feedback
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The correct answer was 3. This concludes the sample question.

        The test will now begin. Press any key to start. Good luck!
    KeyboardComponent starttestaftersample
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine sample_question_instructions
  Routine actual_sample_question
  Routine sample_question_feedback_and_start_test
  LoopInitiator questions loopType="TrialHandler"
    conditionsFile = assembling_images/image_stimulus revised w images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'assembling_images/q1.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q2.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q3.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q4.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q5.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q6.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q7.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q8.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q9.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q10.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q11.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'assembling_images/q12.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q13.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q14.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'assembling_images/q15.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'assembling_images/q16.png'), ('corrAns', 'b')])]
    Routine trial
  LoopTerminator questions
  Routine thank_you_slide
